{
    "arms":
    [
        {
            "name": "PSM1",
            "type": "PSM",
            "io": "sawRobotIO1394-PSM1-32174-calibrated.xml",
            "simulation": "KINEMATIC",
            "pid": "../sawControllersPID-PSM.xml",
            "kinematic": "psm-large-needle-driver.json"
        },
        {
            "name": "PSM2",
            "type": "PSM",
            "io": "sawRobotIO1394-PSM2-31000-calibrated.xml",
            "simulation": "KINEMATIC",
            "pid": "../sawControllersPID-PSM.xml",
            "kinematic": "psm-large-needle-driver.json"
        },
        {
            "name": "MTMR",
            "type": "MTM",
            "io": "sawRobotIO1394-MTMR-32036-footpedal.xml",
            "simulation": "KINEMATIC",
            "pid": "../sawControllersPID-MTMR.xml",
            "kinematic": "psm-large-needle-driver.json"
        },
        {
            "name": "MTML",
            "type": "MTM",
            "io": "sawRobotIO1394-MTML-31976-calibrated.xml",
            "simulation": "KINEMATIC",
            "pid": "../sawControllersPID-MTML.xml",
            "kinematic": "psm-large-needle-driver.json"
        }
    ]
}
