/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "io": {
        "period": 0.0005, // in seconds
        "port": 0 // default is 0
    }
    ,
    "operator-present": {
        "component": "io",
        "interface": "COAG"
    }
    ,
    "arms":
    [
        {
            "name": "PSM1",
            "type": "PSM",
            "io": "sawRobotIO1394-PSM1-32174-calibrated.xml",
            "pid": "../sawControllersPID-PSM.xml",
            "kinematic": "../dvpsm.rob"
        },
        {
            "name": "PSM2",
            "type": "PSM",
            "io": "sawRobotIO1394-PSM2-31000-calibrated.xml",
            "pid": "../sawControllersPID-PSM.xml",
            "kinematic": "../dvpsm.rob"
        }
    ]
}
