/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "io": {
        "footpedals": "footpedal.xml",
        "firewire-protocol": "broadcast-read-write"
    }
    ,
    "arms":
    [
        {
            "name": "PSM1",
            "type": "PSM",
            "io": "sawRobotIO1394-PSM1-28323-calibrated_offset.xml",
            "pid": "../sawControllersPID-PSM.xml",
            "kinematic": "../psm-large-needle-driver-tip-long.json"
        }
        ,
        {
            "name": "PSM2",
            "type": "PSM",
            "io": "sawRobotIO1394-PSM2-31000-calibrated.xml",
            "pid": "../sawControllersPID-PSM.xml",
            "kinematic": "../psm-large-needle-driver-tip-long.json"
        }
    ]
}
